"cln2d - CLEAN 2D processing of under-sampled data. 
"Agilent Technologies, Eriks Kupce, Oxford, March 2009"

$cln2d=''

//BPfindfile('cln2d'):$cln2d
getbinpath('cln2d'):$clex,$cln2d

$procdir='' $fn1='' $fn2='' $log='' $cmd='' $opts=''

$procdir=curexp+'/procdir'
$log = $procdir+'/cln2d.log'
$fn1 = $procdir+'/inf.fid'
$fn2 = $procdir+'/cln2d.fid'

exists($fn1+'/fid','file'):$e  
if not ($e) then
  write('line3','cln2d failed.')
  return
endif

$s=''
format(CSthr,1,1):$s
$opts = ' ' + $s

if(CSdnoise='y') then
  $opts = $opts + ' -d'
endif

$opts = $opts + ' >> '
$cmd = $cln2d +' ' + $fn1 + ' ' + $fn2 + $opts + $log 
write('reset',$log)
write('file',$log,$cmd)
shell($cmd)  

rt($procdir+'/cln2d.fid')
exists('CScleaned','parameter'):$clex
if ($clex<0.5) then
   create('CScleaned','flag')
   create('CScleaned','flag','processed')
endif
CScleaned='y'
setvalue('CScleaned',CScleaned,'processed')
writeparam($procdir+'/cln2d.fid/procpar','CScleaned','add')

wft(1) ds
write('line3','cln2d finished.')

