// Agilent Technologies

    $data=$1
            rtvfs($data)
	    wexp=''
            on('execprocess'):$e
            if ($e > 0.5) then
                $s=''
                substr(execprocess,1):$s  // check that execprocess is not an empty string
                if ($s='') then $e=0 endif
            endif
            if ($e > 0.5) then
                exec(execprocess):$e
            endif
            if $e<0.5 then
		if procdim>1 then dconi else
		    getvalue('arraydim','processed'):$adim
		    if $adim>1 and $adim<128 then dssi(1) else ds(1) endif
		endif
            endif
    newdg
