"Copyright (c) Agilent Technologies  All Rights Reserved."
"used in VnmrJ menu ds_1"
if arraydim>1.5 then
  if procdim>1.5 then
    if trace='f1' then
      on('fn'):$e
      if $e>0.5 then
        $dim=trunc(fn/2+0.5)
      else
        $dim=1 $np2=trunc(np/2+0.5)
        repeat
          $dim=$dim*2
        until ($dim >= $np2)
      endif
    else "trace='f2' "
      on('fn1'):$e
      if $e>0.5 then
        $dim=trunc(fn1/2+0.5)
      else
        $dim=1 $ni2=trunc(ni/2+0.5)
        repeat
          $dim=$dim*2
        until ($dim >= $ni2)
      endif
    endif
  else
    $dim=arraydim
  endif
else
  $dim=1
endif
return($dim)
