"Copyright (c) Agilent Technologies  All Rights Reserved."
" ************************************* "
" **** macro manvi('command name') **** "
" ************************************* "

if $#<>1 then 
    write('line3','Usage: manvi(\'command name\')')
    ABORT
endif

" --- is the user's manual entry present ? --- "
$filename = userdir + '/manual/' + $1
exists($filename,'file'):$e
if $e = 0 then 
" --- is the system manual entry present ? --- "
    $filename = systemdir + '/manual/' + $1
    exists($filename,'file'):$e
endif

if $e = 0 then 
    write('line3','Manual entry, \'%s\', does not exist.',$1)
    ABORT
endif

vi($filename)

