"Copyright (c) Agilent Technologies  All Rights Reserved."
"*********************************************************"
"*                                                        *"
"*     pards    -    creates the parameters necessary     *"
"*			for filtering and downsampling	  *"
"*                                                        *"
"*********************************************************"

exists('downsamp','parameter'):$e
if (not $e) then
  create('downsamp','integer')
  setgroup('downsamp','processing')
  setlimit('downsamp',999,1,1)
  setprotect('downsamp','on',1)
  downsamp='n'
endif

exists('dscoef','parameter'):$e
if (not $e) then
  create('dscoef','integer')
  setgroup('dscoef','processing')
  setlimit('dscoef',49999,3,2)
  setprotect('dscoef','on',1)
  dscoef=61
endif

exists('dslsfrq','parameter'):$e
if (not $e) then
  create('dslsfrq','real')
  setgroup('dslsfrq','processing')
  setprotect('dslsfrq','on',1)
  dslsfrq='n'
endif

exists('dsfb','parameter'):$e
if (not $e) then
  create('dsfb','real')
  setgroup('dsfb','processing')
  setprotect('dsfb','on',1)
  dsfb='n'
endif

exists('filtfile','parameter'):$e
if (not $e) then
  create('filtfile','string')
  setgroup('filtfile','processing')
  filtfile=''
endif
