"Copyright (c) Agilent Technologies  All Rights Reserved."
" ******************************************************************* "
" ***  pbox_dres - get pbox dres value from .DEC or pbox.cal file *** "
" ***             Pbox 5.2, Eriks Kupce 01/08/96                  *** "
" ******************************************************************* "

" !!! Warning, Parameter will not be changed by this macro if it was  "
" set to 'n' (not used)                                               "

$name='' 

if $#>0 then 
  pboxget($1):$name,$pw,$pwr,$pwrf,$dres
else 
  pboxget:$name,$pw,$pwr,$pwrf,$dres
endif

return($dres)
