"Copyright (c) Agilent Technologies  All Rights Reserved."
if ($# < 1) then
  $file=curexp+'/prescription'
else
  $file=$1
endif
exists('prescribed','parameter'):$e
if ($e > 0.5) then
  $p = prescribed
else
  $p = 'y'
endif

"if ($p = 'y') then"
  $parlist = 'ns thk gap theta psi phi lpe lro lpe2 ppe pro ppe2 pss0 pss radialAngles nv2 mpro mppe mpss'
  $parlist = $parlist + ' vtheta vpsi vphi pos1 pos2 pos3 vox1 vox2 vox3'
"endif"
scoutpath=scoutpaths[1]
$parlist = $parlist + ' stheta spsi sphi satpos satthk orient prescribed iplanDefaultType iplanType scoutpaths scoutnodes scoutpath'
writeparam($file,$parlist)

