"Copyright (c) Agilent Technologies  All Rights Reserved."
"setwet - used by getwet to setup wet conditions"
"Modified to include noise check to assure that a peak above the noise if used to move slp or slp2, etc"
"slp will search both sides of the tallest peak and set slp and tof to find h2O anc ch3 solvent freqs."
"wft"
s9
getwetfreqs
wetpbox
fr9
wet='y' composit='y'
ssfilter='y' ss='y'
refpos='n' rfl=sw/2
setssfilter
c13wet='y'
nt=globalnt
"ni=globalni"
inject='n' ntrig=0
wexp='wft'
if not (appmode='lc' and auto='y') then
  if tpwr<40 then tpwr=tpwr+35 endif
endif
if (appmode='lc' and auto='n') then
  wexp='lcsq(\'svp\') wft'
endif
