Copyright (c) Agilent Technologies  All Rights Reserved.
CIGAR2j3j - Improved IMPEACH

          - Introduces a variable J scale for JHH skewing
          - Uniform skewing or "differential" skewing.

        Features included:
                F1 Axial Displacement
                Randomization of Magnetization prior to relaxation delay
                    with G-90-G [selected by sspul flag]
                Includes a 2-stage J filter and BIRD based one-bond 
                    correlation suppression

        Parameters:
                sspul   :  Magnetization randomization option (y/n)
                hsglvl  :  Homospoil gradient level (DAC units)
                hsgt    :  Homospoil gradient time (DAC units)
                gzlvl1  :  Encoding Gradient level (DAC units)
                gt1     :  Encoding gradient time (s)
                gzlvl3  :  Decoding Gradient level (DAC units)
                gt3     :  Decoding gradient time (s)
                gzlvl0  :  Gradients used for echos (DAC units)
                gt0     :  Time for echo gradients (s)
                gstab   :  Recovery delay (s)
        j1max & j1min   :  One-bond XH coupling constants (Hz)
                jnxh    :  Multiple bond XH coupling constant for gHMBC (Hz)
        jnmax & jnmin   :  Multiple bond XH coupling constants for accordion
                jscaleU :  Uniform scaling factor for JHH skewing 
                               [typically 0]
                jscaleD :  Differential scaling factor for 2JHH and 3JHH
                               [used to differentiate 2bond vs 3bond 
                               correlations to protonated carbons]
                pwxlvl  :  X-nucleus pulse power (dB)
                pwx     :  X-nucleus 90 deg pulse width (us)
                d1      :  Relaxation delay (s)

