Copyright (c) Agilent Technologies  All Rights Reserved.
HMQCTOXY_d213:            Setup parameters for C13 HMQCTOXY pulse sequence
			using decoupler 2  (M)

        syntex:         HMQCTOXY_d213(<'GLIDE'>)
        Description:    Converts the current parameter set to
                        HMQCTOXY experiment for C13 with decoupler 2
                        as C13.  If the argument GLIDE
                        is supplied, PROTON parameter set for that
                        particular sample is first retrived.
        Related:	HMQCTOXY
        		HMQCTOXY15
        		HMQCTOXY_d2
        
