Copyright (c) Agilent Technologies  All Rights Reserved.
HSQCTOXY_d213:            Setup parameters for C13 HSQCTOXY pulse sequence
			using decoupler 2  (M)

        syntex:         HSQCTOXY_d213(<'GLIDE'>)
        Description:    Converts the current parameter set to
                        HSQCTOXY experiment for C13 with decoupler 2
                        as C13.  If the argument GLIDE
                        is supplied, PROTON parameter set for that
                        particular sample is first retrived.
        Related:	HSQCTOXY
        		HSQCTOXY15
        		HSQCTOXY_d2
        
