Copyright (c) Agilent Technologies  All Rights Reserved.

NOESY: 2D cross relaxation experiment 

REFERENCES

  Zero quantum suppression:
        M.J. Trippleton and J. Keeler, Angew. Chem. Int. Ed. 42 3938-3941 (2003)

FEATURES

 - F1 quadrature by States-TPPI
 - Gradient homospoil pulse (gt1,gzlvl1) can be used in mixing time
 - Allows single transient spectra (zfs recommended!)

PARAMETERS

  satmode : Determines when the saturation happens. satmode should be set
            to 'ynyn' to enable solvent saturation during d1 and mix.
            NO solvent saturation during t1 is recommended! Transmitter
            should be at solvent frequency!
  wet     : Flag for use of wet suppression rather than presaturation.
  satdly  : Length of presaturation period during relaxation delay d1.
  satpwr  : Saturation power ( < 50Hz; ~ 0dB)
  sspul   : 'y' selects gradient homospoil (gt1,gzlvl1) at beginning of d1.
  hsglvl  : Gradient level for sspul
  hsgt    : Gradient duration for sspul
  mixN    : NOE mixing time
  gzlvl1  : Homospoil gradient level during mix
  gt1     : Homospoil gradient duration during mix
  Gzqfilt : Optional flag for ZQ suppression

