%Z%%M% %I% %G% Copyright (c) 1991-1994 Agilent Technologies All Rights Reserved
addparams:	Add parameter to current probe file (M)

	syntex:	addparams(parameter,value,nucleus,<'tmplt'>,<'system'>)
	
	Description:	Adds a new parameter and its value for a
			specified nuclues to the probe file or to
			probe template
			
	Arguments:	parameter is the name of the parameter to add
			value is a string with the value to be written
				for the parameter.
			nucleus is the nucleus to add in the probe file.
			tmplt is an optional 4th argument to add the
				parameter to the local template instead of
				the current probe file.  If the 4th argument
				is not 'tmplt', it defaults to current
				probe file.
			system is an optional 5th argument to add the
				parameter to the system template or probe file
				instead of local template or probe file.
				Must have write permission.
				
	Examples:	addparams('ref_pwr','53',tn)
			addparams('ref_pwx','00',dn,'tmplt')
			addparams('ref_pwx2','00',dn2,'templt','system')
			
	Related:	setparams
			getparam
			updateprobe
			
				