" Copyright (c) Agilent Technologies  All Rights Reserved. "

*******************************************************************************
center	-	Set Display Limits for Center of Screen
left	-	Set Display Limits for Left Half of Screen
right	-	Set Display Limits for Right Half of Screen
full	-	Set Display Limits for Full Screen
fullt	-	Set Display Limits for Full Screen with room for traces (dconi)
*******************************************************************************

  All these commands set the horizontal control parameters "sc" and "wc"
  accordingly. "full", "fullt" and "center" also set the vertical control
  parameters "sc2" and "wc2". For 2D data, space is left for the scales.
