Copyright (c) Agilent Technologies  All Rights Reserved.
/************************************
do_pcss Calculate the Proton Chemical Shifts Spectrum
************************************/

do_pcss		Calculate the Proton Chemical Shifts Spectrum (C)

   Syntax: 	do_pcss<(threshold, maxcc, maxw)>

   Description:	do_pcss is used to strip a high resolution proton spectrum 
   		down to a list of chemical shifts and save into the file 
   		'pcss.outpar'.  
	
   Argument:	'threshold' is used to determine whether a point is belong 
   		to a peak or is noise.
   		
   		'maxcc' is the maximum allowable coupling constant in the spectrum.
		
		'maxw' is the maximum width of a spin multiplet in the spectrum.

		If no parameter is used, the program will calculate the 
		threshold automatically and use default values for the 
		maximum  allowable coupling constant (20Hz) and the 
		maximum width of a spin multiplet (60Hz)
  
   Examples:	do_pcss
		do_pcss(10)
		do_pcss(9, 20, 80)
   		
   Related: 	pcss, nopcss

