Copyright (c) Agilent Technologies  All Rights Reserved.
********************************************************************************
 dshape - display pulse shape or modulation pattern (M)
 pshape - plot pulse shape or modulation pattern (M)
********************************************************************************

      Syntax: dshape<(patterfile.ext)>
	      pshape<(patterfile.ext)>

 Description: dshape displays the real (X) and imaginary (Y) components of
	      a shaped pulse. Any type of waveform (.RF, .DEC or .GRD) can
	      be displayed.

   Arguments: dshape takes the shape or pattern (file) name as argument.
              The .ext is shapefile extension indicating the type of the 
              waveform (.RF, .DEC or .GRD). 
	      Absolute and relative filenames can be specified, as well as
	      simple pattern file names (in this case dshape will first look
	      in the local directory, then in the user's shapelib, finally
	      in /vnmr/shapelib. If no filename is given, dshape displays 
	      the last created waveform.

    See also: E.Kupce & R.Freeman, J.Magn.Reson.(A) 105 (1993), 234.

     Related: dshapef - display last generated pulse shape (M)
	      dshapei - display pulse shape interactively (M)
              pshape - plot shape (M)
	      dprofile - view pulse excitation profile from Pbox software (M)
	      pprofile - plot pulse excitation profile from Pbox software (M)
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
