Copyright (c) Agilent Technologies  All Rights Reserved.

gHSQCAD: Gradient selected phase-sensitive HSQC, adiabatic version

See the J1CHTab and HSQC entries for general information.

The lower case g denotes this sequence as one which uses PFG gradients to select the
desired coherence.

This pulse sequence utilizes fully adiabatic 13C 180s that are designed to
time refocusing to best match the likely 1JCH coupling for a given 13C chemical
shift. Generally speaking 1JCH is smallest at low values for 13C chemical shifts and
increases in value as carbon shift increases. These specially timed adiabatic pulses
improve signal to noise, decrease loss of signal because of minor calibration defects
and generally yield data with fairly good quantification potential. Because of the
special nature of the timed sweep inversion afforded by the adiabatic pulses it is best
to retain the default value of 146 for the paramter j1xh. Cyclo-propyl groups are an
expection that will suffer from phase distortion because the 13C chemical shift is at
very high-field yet the 1JCH coupling is very large.

All adiabatic pulses are created and parameters loaded into the experiment at setup
time using the calibrations found on the probe file.
