Copyright (c) Agilent Technologies  All Rights Reserved.

gHSQCTOXY: Gradient Selected phase-sensitive HSQC followed by MLEV17c spinlock

FEATURES

 - F1 Axial Displacement
 - Randomization of Magnetization prior to relaxation delay with G-90-G 
   [selected by sspul flag]
 - TANGO-Gradient option to suppress C12 protons with PFG [selected by nullflg]
 - Option to invert direct 1H-13C correlation
		
PARAMETERS

  sspul  :  y - selects magnetization randomization option
  nullflg:  y - selects TANGO-Gradient option if PFGflg=y
  hsglvl :  Homospoil gradient level (DAC units)
  hsgt	 :  Homospoil gradient time
  gzlvl1 :  Encoding Gradient level
  gt1	 :  Encoding gradient time
  gzlvl3 :  Decoding Gradient level
  gt3	 :  Decoding gradient time
  gstab	 :  Recovery delay
  satmode:  y - selects presaturation option during relax and null delays
  satfrq :  Presaturation frequency
  satdly :  Presaturation delay
  satpwr :  Presaturation power
  mixT	 :  TOCSY (MLEV17) spinlock mixing time
  trim	 :  Trim pulse preceeding spinlock
  mult   :  0 - all signals have same phase, 2 - invert direct H-C signals
  slpwr	 :  Spin-lock power level
  slpw	 :  90 deg pulse width for spinlock
  j1xh	 :  One-bond XH coupling constant
  pwxlvl :  X-nucleus pulse power
  pwx	 :  X-nucleus 90 deg pulse width
  d1	 :  Relaxation delay
  d2	 :  Evolution delay
