Copyright (c) Agilent Technologies  All Rights Reserved.
gXHCAL - Sequence for X/H gradient ratio calibration
		(based on gHSQC) 
	
        Paramters:
                gzlvl1  :       encoding Gradient level
                gt1     :       encoding gradient time
                gzlvl3  :       decoding Gradient level
                gt3     :       decoding gradient time
                gstab   :       recovery delay
                j1xh    :       One-bond XH coupling constant
                pwxlvl  :       X-nucleus pulse power
                pwx     :       X-nucleus 90 deg pulse width
                d1      :       relaxation delay

