Copyright (c) Agilent Technologies  All Rights Reserved.
*******************************************************************************
getvalue	- 	get the value of any variable in a tree.
getvalue	- 	get the number of elements of any variable in a tree.
*******************************************************************************

  Usage -- getvalue(name [,index] [,tree])<:$val>
  Usage -- getvalue(name ,'size' [,tree])<:$num>

  "getvalue" gets the value of any variable in a tree.  The value
  of most variables can be accessed simply by using their name in an
  expression. For example, sw? or r1=np accesses the value of sw and np,
  respectively.  However, parameters in the 'processed' tree can not be
  accessed that way.  The getvalue command can be used to get the value
  of a parameter in the 'processed' tree.
 
  Single elements of an arrayed parameter can be retrieved by suppling
  an optional "index".  "index" defaults to 1.
  If the second argument is the keyword 'size', then the number of elements
  of the parameter can retrieved. If the parameter does not exist, a
  zero (0) will be returned.

  The five variable trees are 'current', 'global' , 'processed',
  'systemglobal', and 'usertree'.  The default tree is 'processed'. 
  If an incorrect tree name is supplied, the command will abort.

  Without a return value ($val and $num in the examples below), getvalue
  will display the results on "line3".

  Examples:

    getvalue('arraydim'):$val     get the value of arraydim in the 'processed' tree.
    getvalue('phase','size'):$num get the number of elements of phase in the 'processed' tree.
