Copyright (c) Agilent Technologies  All Rights Reserved.

*****************************************************************************
 h1p - Processing of 1D proton spectra (M)
*****************************************************************************

      Syntax: h1p

 Description: "h1p" is a macro for processing non-arrayed 1D proton spectra
              using a set of standard macros. h1p is called by the proc1d
	      macro, but can also be used "by hand".
	      Fully automatic processing (up to a point where a spectrum could
	      be plotted) is provided:
	      Fourier transformation (using pre-set weighting functions), auto-
	      matic phasing (aphx macro), select integral regions (hregions
	      macro), adjust integral size (integrate macro), vertical scale
	      adjustment (vsadjc macro), avoiding excessive noise (noislm
	      macro), threshold adjustment (if required, thadj macro), and
	      referencing to the TMS signal, if present (tmsref macro).

     Related: h1 - Automated proton acquisition (M)
	      proc1d - Automatically process non-arrayed 1D fids (M)
	      aphx - Perform and check automatic phasing (M)
	      hregions - Select integral regions for proton spectra (M)
	      integrate - Automatically integrate 1D spectrum (M)
	      vsadjh - Adjust vertical scale for proton spectra (M)
	      noislm - Avoids excessive noise (M)
	      thadj - Adjust threshold (M)
              tmsref - Reference spectrum to TMS line (M)
