" Copyright (c) Agilent Technologies  All Rights Reserved. "
********************************************************************************
hztomm - converts positions from Hz or PPM to plotter units (mm) or draws a box.
********************************************************************************
        Use p following numerical values for PPM entries.
        If return arguments are not supplied, results are displayed. 

	hztomm(x-position):xmm converts a location along the 1D axis in Hz
        or PPM to plotter units using the current values of 'sp' and 'wp'.
        Plotter units are mm on most plots, and are scaled for the graphics
        display.

	hztomm(x-position,y-position):xmm,ymm converts coordinates in Hz or
        PPM on a 2D plot to plotter units using 'sp' and 'wp' for converting
        the horizontal position and 'sp1' and 'wp1' for the vertical position.

	hztomm(<'box',<'plotter,>>x-left,x-right,y-bottom,y-top):x1mm,x2mm,
	y1mm, y2mm converts box edges in Hz or PPM on a 2D plot to plotter 
	units, using 'sp' and 'wp' for converting the left and right edges, 
	and 'sp1' and 'wp1' for the top and bottom edges.  

	'box', optional, causes the box to be drawn and the first two return
	arguments, if supplied, to give instead the location of the upper
	left corner in plotter units. If the keyword 'plotter' is used, the
	box is drawn on the plotter, otherwise on the graphics display.
