Copyright (c) Agilent Technologies  All Rights Reserved.

*****************************************************************************
 p31p - Processing of 1D phosphorus spectra (M)
*****************************************************************************

      Syntax: p13p

 Description: "p13p" is a macro for processing non-arrayed 1D phosphorus spectra
              using a set of standard macros. p31p is called by the proc1d
	      macro, but can also be used "by hand".
	      Fully automatic processing (up to a point where a spectrum could
	      be plotted) is provided:
	      Fourier transformation (using pre-set weighting functions), auto-
	      matic phasing (aphx macro), automatic integration (integrate
	      macro, if required only), vertical scale adjustment (vsadjc
	      macro), avoiding excessive noise (noislm macro), threshold
	      adjustment (thadj macro), and referencing to the TMS signal,
              if present (tmsref macro). 


    See also: System Operation, Chapter 12, "Sample Changer Operation."

     Related: p31 - Automated phosphorus acquisition (M)
	      proc1d - Automatically process non-arrayed 1D fids (M)
	      aphx - Perform and check automatic phasing (M)
	      integrate - Automatically integrate 1D spectrum (M)
	      vsadjc - Adjust vertical scale for carbon spectra (M)
	      noislm - Avoids excessive noise (M)
	      thadj - Adjust threshold (M)
	      tmsref - Reference spectrum to TMS line (M)
