Copyright (c) Agilent Technologies  All Rights Reserved.
********************************************************************************
 pboxget - extract Pbox calibration data from pbox.cal or Pbox shapefile (M)
********************************************************************************

  Syntax: pboxget<(shapefile.EXT)>:$name,$par1,$par2,$par3,$par4,$par5

 Description: pboxget extracts calibration data from shapefile.ext 
              generated by Pbox or, if filename is not provided, from 
              pbox.cal file containing parameters of the last generated 
              Pbox shapefile. Order of the returned parameters is as 
              follows : name, pw, pwr, pwrf, dres, dmf
              Warning : parameter is not changed by this macro if it was 
              set to 'n' (not used)!

   Arguments: shapefile.EXT - shapefile name including extension. 
              name - name without extension
              pw - length of the waveform (us)
              pwr - power level (dB)
              pwrf - fine power level
              dres - decoupler resolution
              dmf - decoupler modulation frequency

    Examples: pboxget('myfile.DEC'):dseq,dres,dpwr,dpwrf,dres,dmf
	      pboxget('selshape.RF'):pwpat,selpw,selpwr
              pboxget:dseq2,dres2,dpwr2,dmf2,dres2,dmf2

     Related: pbox_dmf - extract dmf value from Pbox shapefile
              pbox_dres - extract dres value from Pbox shapefile
              pbox_name - extract name of last shapefile generated by Pbox
              pbox_pw - extract pulse length from Pbox shapefile
              pbox_pwr - extract pulse power from Pbox shapefile 
	      pbox_pwrf - extract pulse fine power from Pbox shapefile 
	      Pbox - Pandora's box pulse/pattern generator (UNIX)
