Copyright (c) Agilent Technologies  All Rights Reserved.
********************************************************************************
 pxshape - generate a single-band shapefile (M)
********************************************************************************

 Syntax: pxshape('sh  bw/pw  ofs  st  ph  fla  trev  d1  d2  d0','name','disp')

 Description: pxshape generates a single-band waveform based on wave 
              definition provided as a single string of wave parameters.

   Arguments: a single string containing wave parameters in predefined order
              (see syntax). The number of parameters must be in the range
              between 1 and 10. The wave parameters are
                sh - shapename
                bw - bandwidth (Hz)
                pw - pulsewidth (sec)
                ofs - offset, in Hz 
                st - spin status, 0 for excitation, 1 for de-excitation
                     and 0.5 for refocusing.
                ph - phase (or phase cycle, see wavelib/supercycles)
                fla - flipangle (warning !!! this may override the default 
                      flipangle)
                trev - time reversal (can be used to cancel time reversal
                       introduced by st=1
                d1 - delay (sec) prior the pulse
                d2 - delay (sec) after the pulse
                d0 - delay/command prior d1. If d0 = a, the wave is appended 
                     to the previous wave.
              name - output filename. Extension is optional and can be used
                     to override internally defined shape type.
              disp - the shape is displayed by default in the Vnmr window.
                     If disp is set to 'n' the shape will not be displayed.
              
     Related: putwave, setwave, opx, cpx, Pbox

    Examples: pxshape('eburp1','myshape.RF')
	      pxshape('GARP 12000.0','shape2','y')
              pxshape('esnob 600.0 -1248.2 n 180.0 n n 0.001','xxx')

