Copyright (c) Agilent Technologies  All Rights Reserved.
********************************************************************************
 selex - define excitation band (M)
********************************************************************************

  Syntax: selex<('sh'<,pw<,st<,ph<,fla<,trev>>>)>

 Description: within the Pbox ("Pandora's box") software environment, selex 
	      defines the excitation band from the position of cursors in 
              the Vnmr window and reports them to user. It also sets r1 to 
              excitation bandwidth and r2 to offset. The macro uses pbox_bw 
              and putwave macros. 

   Arguments: sh - shapename
              pw - pulsewidth (sec)
              st - spin status, 0 for excitation, 1 for de-excitation and
                   0.5 for refocusing
              ph - phase (or phase cycle, see wavelib/supercycles)
              fla - flipangle (warning ! this may override the default 
                    flipangle, set to 0.0 if not used)
              trev - time reversal (can be used to cancel time reversal
                     introduced by st=1

    Examples: opx selex('esnob', 0.0, 1, '90') cpx dshapef

     Related: opx, selex, cpx, putwave, setwave, pxshape
