" Copyright (c) Agilent Technologies  All Rights Reserved. "
*******************************************************************************
*    readallshims   -   read all shims from hardware                          *
*    setallshims    -   set all shims into hardware                           *
*    setallshims('list') -   set specified shims into hardware                           *
*******************************************************************************

    readallshims reads all the shims from hardware and sets them into
        the shim parameters in the current parameter tree.

    setallshims sets all the shims from the current parameter tree into 
        hardware.  It is equivalent to load='y' su without setting all the 
        hardware parameters normally set by su (temp, decoupling, 
        transmitter initialization, etc).

    setallshims('list') set the subset of shims given in the argument list.
        For example, setallshims('z1 z2 z3 xy') sets the four shims specified.

For both macros, the shims used depend on the shimset configuration.  
For the UltraShims shimset, these macros are active only if hardware-software 
shim communication is enabled.  

See also macros readhw, sethw.
