Copyright (c) Agilent Technologies  All Rights Reserved.

*****************************************************************************
 stack - Fix stacking mode for processing / plotting arrayed spectra (M)
 autostack - Automatic stacking for processing / plotting arrays (M)
*****************************************************************************

      Syntax: stack(stackmode)
	      autostack

 Description: When processing and plotting arrayed 1D spectra, the software
	      will automatically determine the stacking mode (horizontal,
	      vertical or diagonal) from the number of traces and the number
	      of lines in the spectrum. If this automatic function is not
	      desirable (or makes an undesirable decision), it can be over-
	      ridden by either placing the "stack" macro in the experiment
	      startup macro, or by calling "stack" before (re-)processing a
	      spectrum.
	      "autostack" switches back to automatic determination of the
	      stack mode by destroying the variable "stackmode".

   Arguments: "stack" takes a mandatory argument, which can either be
		'horizontal', 'vertical', or 'diagonal'

     Related: procarray - Process arrayed 1D spectra (M)
	      plarray - Plot arrayed 1D spectra (M)
              stackmode - Stacking control for processing (P)
