"macro calc_nf"
"********************************************************************   "
"macro calc_nf"
"                                                                       "
" This software contains proprietary and confidential information of    "
"macro calc_nf"
" is prohibited without prior consent.                                  "
"                                                                       "
" NAME:                                                                 "
"    calc_nf                                                            "
"                                                                       "
" DESCRIPTION:                                                          "
"    finds the value of nf for ECC sequence                             "
"                                                                       "
" Ex.:                                                                  "
"    calc_nf - no arguments                                             "
"                                                                       "
"																		"
"                                                                       "
"********************************************************************   "
if ($# <> 0) then
     write('line3','Function calc_nf does not take input arguments!')
     abort
endif     

nf = (ne_ecc + (nv -1)*ne2_ecc) * ecc_loop

return(nf)
